OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
Comment
  --:: Remember to change the file
  to the one you recorded before!

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/motor-imagery-1-[2021.07.02-16.36.06].ov
#0.Output stream 2 -> Channel Rename (69 Channel) => #1
  New channel names = Fp1;Fz;F3;F7;PO9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;PO10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;FCz;VEOG;HEOG;ECG;LEMG;REMG
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> 0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
#2.Output stream 1 -> Common Average Reference => #4
Input stream 1=#4, Input stream 2=#2.Output stream 2 -> Identity => #5
#5.Output stream 2 -> Stimulation listener
  Log level to use = Information
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Spectral Analysis => #8
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
Input stream=#8.Amplitude -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/spectrumAmplitude-Left.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Spectral Analysis => #11
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
Input stream=#11.Amplitude -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/spectrumAmplitude-Right.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#5.Output stream 2 -> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStop
  Command 1 = python Z:\fromVbox\openvibe-scripting-main\modifyTrainScenario.py
