OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Direct feedback
  You can replace "Matrix Display"
  with any other visualization technique
Comment
  Feedback using classification
  You can replace "Graz Viz" with another
  visualization technique...
Comment
  Feedback using classification
  You can replace "Graz Viz" with another
  visualization technique...
Settings
  EEGDataLive = motor-imagery-live.ov
  ClassifWeights = classifier-weights.xml
  MI_Stimulations = mi-stimulations.lua
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;FCz;CP5;CP1;CP2;CP6;Fpz;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10;AF7;AF3;AF4;AF8;F5;F1;F2;F6;FT9;FT7;FC3;FC4;FT8;FT10;C5;C1;C2;C6;TP7;CP3;CPz;CP4;TP8;P5;P1;P2;P6;PO7;PO3;POz;PO4;PO8
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  ConnectivityLength = 0.5
  ConnectivityOverlap = 50
  AutoRegressiveOrder = 19
  PsdSize = 500
  ConnectivityShift = 0.25
  StimulationEpoch = 3
  StimulationDelay = 1

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/Train_2_sub_01.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#1.Experiment information, Input stream 2=#1.Signal stream, Input stream 3=#1.Stimulations -> Identity => #2
#2.Output stream 2 -> Channel Rename => #3
  New channel names = $var{ChannelNames}
Input stream 1=#2.Output stream 1, Input stream 2=#3, Input stream 3=#2.Output stream 3 -> Identity => #4
#4.Output stream 2 -> 0x341d3912 Common Average Reference
#4.Output stream 2 -> Temporal Filter => #6
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Input stream 1=#4.Output stream 2, Input stream 2=#4.Output stream 3 -> Identity => #7
Data=#6, Stimulations=#7.Output stream 2 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input signal=#7.Output stream 1, Input stimulations=#7.Output stream 2 -> Stimulation based epoching => #9
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 2
-> Identity "SPLIT CONNECT"
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #17
  Averaging type = Epoch block average
  Epoch count = 18.0
#9 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #22
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#22.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #25
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#17, Input stream 2=#25 -> Feature aggregator => #26
Features=#26 -> Classifier processor MI => #27
  Filename to load configuration from = $var{ClassifWeights}
Input stream=#27.Probability values, Stimulations stream=#27.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}]-results-classif-MI.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#7.Output stream 1, Input stimulations=#7.Output stream 2 -> Stimulation based epoching => #29
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 2
-> Identity "SPLIT CONNECT"
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #37
  Averaging type = Epoch block average
  Epoch count = 18.0
#29 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #42
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#42.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #45
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#37, Input stream 2=#45 -> Feature aggregator => #46
Features=#46 -> Classifier processor REST => #47
  Filename to load configuration from = $var{ClassifWeights}
Input stream=#47.Probability values, Stimulations stream=#47.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}]-results-classif-REST.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#7.Output stream 1 -> Channel Selector
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #51
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#51.PSD -> Frequency Band Selector NF
  Frequencies to select = 22
-> Spectrum Average => #53
  Considers zeros = false
Experiment information=#4.Output stream 1, Signal=#4.Output stream 2, Stimulations=#4.Output stream 3 -> EDF File Writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}].edf
Input stream 1=#4.Output stream 1, Input stream 2=#4.Output stream 2, Input stream 3=#4.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}].ov
  Use compression = false
Input signal=#2.Output stream 2, Input stimulations=#2.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = 0.5
  Epoch offset (in sec) = 20
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
-> AutoRegressive Coefficients => #57
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#57.PSD -> Frequency Band Selector
  Frequencies to select = 5
-> Spectrum Average => #59
  Considers zeros = false
Input stream 1=#27.Probability values, Input stream 2=#59 -> Streamed matrix multiplexer
-> TCP Writer
  Port = 5978
  Output format = Raw
#1.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Graz Motor Imagery BCI Stimulator => #63
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 18
  First Class = OVTK_GDF_Left
  Baseline Duration (in sec) = 30
  Wait For Cue Duration (in sec) = 3
  Reaction Time (in sec) = 1
  MI Task Duration (in sec) = 3
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulation=#63, Amplitude=#53 -> CursorInterface
  Show Instruction = true
  Show Feedback = true
  Delay feedback = false
  Show Accuracy = false
  Prediction to integrate = 5
  Positive Feedback only = false
  Fullscreen = false
  Mode of Display = 3
  Mode of Classification = 1
  Display Score = false
#63 -> TCP Writer
  Port = 5698
  Output format = String
