OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Stimulation Generation
  + Instructions display (arrows, crosses...)
Comment
  Clear at "End_Of_Trial"
Comment
  Saving exp in
  EDF/GDF + ov files
Comment
  TCP 5698
  Update events to relay
Comment
  Stop scenario when reaching
  "Experiment Stop"
Comment
  Monopolar montage
Comment
  Writing metadata in CSV file
  (used for getting sampling frequency, list of electrodes...)
Comment
  ECG and EMGs display
Comment
  Bipolar montage viz
  (anteroposterior)
Settings
  EEGData = MI-[$core{date}-$core{time}].ov
  EEGMetaData = MI-[$core{date}-$core{time}]-META.csv
  MI_Stimulations = mi-stimulations.lua
  SignalsDirectory = signals
  AuxChannels = ECG;FDI_ah;APB_ah;ADM_ah;ECD_ah;FDI_uh;APB_uh;ECD_uh

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 3 -> TCP Writer
  Port = 5698
  Output format = String
Experiment information=#1.Output stream 1, Signal=#1.Output stream 2, Stimulation=#1.Output stream 3 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/MI-[$core{date}-$core{time}].gdf
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGData}
  Use compression = false
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#1.Output stream 2, Input stimulations=#1.Output stream 3 -> Stimulation based epoching => #6
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
Input stream=#6, Stimulations stream=#1.Output stream 3 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGMetaData}
  Precision = 10
  Append data = false
  Only last matrix = false
Graz Motor Imagery BCI Stimulator
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 18
  First Class = OVTK_GDF_Left
  Baseline Duration (in sec) = 30
  Wait For Cue Duration (in sec) = 3
  Reaction Time (in sec) = 1.0
  MI Task Duration (in sec) = 3.0
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.500
-> Display cue image => #9
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_Foot
  Cue Image 1 = D:/manip/BCINET/Backup/Images/cross-center.png
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Cue Image 2 = D:/Manip/BCINET/Backup/Images/cue-center-Big.png
  Stimulation 2 = OVTK_GDF_Left
  Cue Image 3 = D:/Manip/BCINET/Backup/Images/intercue-center .png
  Stimulation 3 = OVTK_GDF_Start_Of_Trial
  Cue Image 4 = D:/Manip/BCINET/Backup/Images/intercue-center .png
  Stimulation 4 = OVTK_GDF_End_Of_Trial
Input stream 1=#1.Output stream 2, Input stream 2=#9 -> Identity => #10
#10.Output stream 1 -> Channel Selector "AUX"
  Channel List = $var{AuxChannels}
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 48
  High Cut-off Frequency (Hz) = 52
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 98
  High Cut-off Frequency (Hz) = 102
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 148
  High Cut-off Frequency (Hz) = 152
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 198
  High Cut-off Frequency (Hz) = 202
-> Temporal Filter => #16
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 10
  High Cut-off Frequency (Hz) = 250
Data=#16, Stimulations=#10.Output stream 2 -> Signal display "ECG/EMG Signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10.Output stream 1 -> Temporal Filter => #18
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Low Cut-off Frequency 2 (Hz) = 1
  High Cut-off Frequency 2 (Hz) = 40
Data=#18.Output signal 2, Stimulations=#10.Output stream 2 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = true
#18.Output signal -> Channel Selector "19 electrodes"
  Channel List = Fp1;F3;C3;P3;O1;F7;T7;P7;Fp2;F4;C4;P4;O2;F8;T8;P8;Fz;Cz;Pz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1; -1; 0; 0; 0; 0; 0; 0; 0; 0; 0; 0; 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0
  Number of Output Channels = 18
  Number of Input Channels = 19
  Filter matrix file =
-> Channel Rename => #22
  New channel names = Fp1-F3; Fp1-F7; F3-C3; F7-T7; C3-P3; T7-P7; P3-O1; P7-O1; Fz-Cz; Cz-Pz; Fp2-F4; Fp2-F8; F4-C4; F8-T8; C4-P4; T8-P8; P4-O2; P8-O2
Data=#22, Stimulations=#10.Output stream 2 -> Signal display "Bipolar (1-40 Hz)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
