OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  --:: Remember to change the file
  to the one you recorded before!

Generic stream reader => #0
  Filename = C:/Users/arthur.desbois/Documents/dev/MassimoExp/oscillator.ov
#0.Output stream 2 -> Channel Rename (32 Channel) => #1
  New channel names = FP1;FP2;F7;F3;Fz;F4;F6;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> 0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
#2.Output stream 1 -> Common Average Reference => #4
Input stream 1=#4, Input stream 2=#2.Output stream 2 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = 0.4
  Epoch intervals (in sec) = 0.028
-> AutoRegressive Coefficients => #8
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#8.PSD -> 0x341d3912 Power Spectrum (burg) - Left condition
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Input stream=#8.PSD -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/spectrumAmplitude-Left.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 0.4
  Epoch intervals (in sec) = 0.028
-> AutoRegressive Coefficients => #13
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
Input stream=#13.PSD -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/spectrumAmplitude-Right.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#13.PSD -> 0x341d3912 Power Spectrum (burg) - Right condition
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#5.Output stream 2 -> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStop
  Command 1 = start python.exe C:\\Users\\arthur.desbois\\Documents\\dev\\openvibeScripting\\openvibe-automation\\test.py
  Stimulation 2 = 02
  Command 2 =
#5.Output stream 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#5.Output stream 2 -> 0x341d3912 Stimulation listener
  Log level to use = Information
#0.Output stream 2 -> 0x341d3912 Channel Rename (69 Channel)
  New channel names = Fp1;Fz;F3;F7;PO9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;PO10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;FCz;VEOG;HEOG;ECG;LEMG;REMG
