OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/motor-imagery-1-[2021.01.08-17.53.03].ov
#0.Output stream 2 -> Channel Rename (69 Channel) => #1
  New channel names = Fp1;Fz;F3;F7;PO9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;PO10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;FCz;VEOG;HEOG;ECG;LEMG;REMG
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> 0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
#2.Output stream 1 -> Common Average Reference
-> Channel Selector "C4;FC5;FC3;C5" => #5
  Channel List = C4;FC5;FC3;C5
  Action = Select
  Channel Matching Method = Name
Input stream 1=#5, Input stream 2=#2.Output stream 2 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Spectral Analysis => #8
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#8.Amplitude -> Frequency Band Selector
  Frequencies to select = 8:30
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #11
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Spectral Analysis => #13
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#13.Amplitude -> Frequency Band Selector
  Frequencies to select = 8:30
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #16
Stimulations=#6.Output stream 2, Features for class 1=#11, Features for class 2=#16 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier_6channelSpatialfilter_15to10.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
